OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Keyboard stimulator
  Filename = ${Player_ScenarioDirectory}/config/buttons.txt
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Number_1B
  Stimulation range end = OVTK_StimulationId_Number_1B
-> Lua Stimulator
  Lua Script = ${Player_ScenarioDirectory}/scripts/main.lua
-> Stimulation listener
  Log level to use = Information

0x341d3912 Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt

0x341d3912 Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_0F
-> 0x341d3912 Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
